PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = recognition_memorySP
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine welcomescreen
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    TextComponent textWelcome
      letterHeight = 0.05
      startVal [time (s)] = 0
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      text:
        Welcome to my experiment. Please read the instruction carefully.
        The experiment consists of two phases.
        For the first phase; A few words will appear on the screen. Please try to memorize them.
    KeyboardComponent keyWelcome
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
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  Routine StudyTrial
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    TextComponent textStudyWord
      color [set every repeat] = $colour
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text [set every repeat] = $WordItem
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  Routine Blank500
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    TextComponent textBlank500
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine WaitScreen
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    TextComponent textWait
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Now, a set of words will appear which will have some of the words that you saw previously as well as some new words. You will have to identify which of the words had appered before irrespective of their colour; to do so if you see a word that has appeared in the first phase then press 'y' key on the keyboard and if the word was not shown before press 'n' key on the keyboard.

        Press 'space' to begin with the task.
    KeyboardComponent keyWait
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine TestTrial
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    TextComponent textTestWord
      color [set every repeat] = $colour
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $WordItem2
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    KeyboardComponent keyTest
      allowedKeys = 'y','n'
      correctAns = $corr_res
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine EndScreen
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    TextComponent textEnd
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = Thanks for participating
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  Routine blank500
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    TextComponent textblank
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
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Flow
  Routine welcomescreen
  LoopInitiator trialsStudy loopType="TrialHandler"
    conditionsFile = C:/Users/Ishitaa Nadar/OneDrive/Documents/word_stimuli.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'WordItem': 'Friend', 'colour': 'green'},
      {'WordItem': 'Phone', 'colour': 'green'},
      {'WordItem': 'Mountain', 'colour': 'green'},
      {'WordItem': 'Valley', 'colour': 'blue'},
      {'WordItem': 'Book', 'colour': 'blue'},
      {'WordItem': 'Bag', 'colour': 'blue'}]
    Routine StudyTrial
  LoopTerminator trialsStudy
  Routine WaitScreen
  Routine Blank500
  LoopInitiator trialsTest loopType="TrialHandler"
    conditionsFile = C:/Users/Ishitaa Nadar/OneDrive/Documents/word_stimuli2.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'WordItem2': 'friend', 'colour': 'green', 'corr_res': 'y'},
      {'WordItem2': 'phone', 'colour': 'green', 'corr_res': 'y'},
      {'WordItem2': 'Mountain', 'colour': 'green', 'corr_res': 'y'},
      {'WordItem2': 'Valley', 'colour': 'blue', 'corr_res': 'y'},
      {'WordItem2': 'Book', 'colour': 'blue', 'corr_res': 'y'},
      {'WordItem2': 'Bag', 'colour': 'blue', 'corr_res': 'y'},
      {'WordItem2': 'Land', 'colour': 'green', 'corr_res': 'n'},
      {'WordItem2': 'Globe', 'colour': 'green', 'corr_res': 'n'},
      {'WordItem2': 'Hammer', 'colour': 'green', 'corr_res': 'n'},
      {'WordItem2': 'Pet', 'colour': 'blue', 'corr_res': 'n'},
      {'WordItem2': 'Wire', 'colour': 'blue', 'corr_res': 'n'},
      {'WordItem2': 'Street', 'colour': 'blue', 'corr_res': 'n'}]
    Routine TestTrial
  LoopTerminator trialsTest
  Routine EndScreen
