PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1280, 720]
  expName = priming_exp
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine trial
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
      text [set every repeat] = $study_word
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    SliderComponent slider
      forceEndRoutine = True
      granularity = 0
      labels = "Familiar","unfamiliar"
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine test
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    TextComponent text_2
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $test
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent text_3
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = click to submit
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    MouseComponent mouse
      clickable = $text_3
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = study_words.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'study_word': 'book'},
      {'study_word': 'cushion'},
      {'study_word': 'phone'},
      {'study_word': 'marble'},
      {'study_word': 'board'},
      {'study_word': 'laptop'},
      {'study_word': 'chart'},
      {'study_word': 't shirt'},
      {'study_word': 'mouse'},
      {'study_word': 'pastry'},
      {'study_word': 'case'},
      {'study_word': 'crusie'},
      {'study_word': 'police'},
      {'study_word': 'keys'},
      {'study_word': 'poster'}]
    Routine trial
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = test_words.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'test': 'l_pt_p', 'REF': 'laptop', 'old_new': 'old'},
      {'test': '_ha_t', 'REF': 'chart', 'old_new': 'old'},
      {'test': 't_hi_t', 'REF': 'T shirt', 'old_new': 'old'},
      {'test': '_ou_e', 'REF': 'mouse', 'old_new': 'old'},
      {'test': 'P_str_', 'REF': 'pastry', 'old_new': 'old'},
      {'test': 'c_s_', 'REF': 'case', 'old_new': 'old'},
      {'test': '_ru_s_', 'REF': 'cruise', 'old_new': 'old'},
      {'test': 'P_li_e', 'REF': 'police', 'old_new': 'old'},
      {'test': 'k_y_', 'REF': 'keys', 'old_new': 'old'},
      {'test': 'p_st_r', 'REF': 'poster', 'old_new': 'old'},
      {'test': '_o_rd', 'REF': 'board', 'old_new': 'old'},
      {'test': '_ar_l_', 'REF': 'marble', 'old_new': 'old'},
      {'test': '_h_ne', 'REF': 'phone', 'old_new': 'old'},
      {'test': 'b_o_', 'REF': 'book', 'old_new': 'old'},
      {'test': 'c_s_io_', 'REF': 'cushion', 'old_new': 'old'},
      {'test': 'ta_l_', 'REF': 'table', 'old_new': 'new'},
      {'test': 'p_nc_l', 'REF': 'pencil', 'old_new': 'new'},
      {'test': 'v_s_', 'REF': 'vase', 'old_new': 'new'},
      {'test': 'bo_t_e', 'REF': 'bottle', 'old_new': 'new'},
      {'test': 'c_m_ra', 'REF': 'camera', 'old_new': 'new'}]
    Routine test
  LoopTerminator trials_2
